'CR3000_TFScamp
'Created by Christie Haupert 8/7/08 - 8/21/08

'This program replaces the 21x datalogger and program: 07TLKADD 0MIN and TEMP CORRECTION.CSI
'Datalogger upgrade from 21x to CR3000 was completed on 8/19/08. Along with following changes:
'Added CMP6 pyranometer with CV2, removed LICOR Pyranometer, added RM Young 41382VC at 3m,
'replaced 5m CS500 T/RH with HMP45C (7 wire), removed Wind Speed and T/RH from 1 m, addition of 107-L Temp for Lake Temp.
'All thermocouples were kept. Wind sensor - speed/direction were replaced with newly calibrated.

'--------------------------------Notes and changes-----------------------------------------------------
'April 19, 2009 made following changes: 
'1) added CardOut command to all data tables to store data onto compact flash memory card.
'2) changed daily table to report average and maximum wind speed, not minimum wind speed.
'3) added 3 hour output for evapo_depth; added YES UVA UVB sensors just single end voltage Jim L 9Jun2010

'July 1, 2010 made the following changes:
'4) modified YES UVA UVB code (does not work in single ended mode) Werner Eugster 1Jul2010
'5) added YES UVA UVB output to the 5-minute table Werner Eugster 1Jul2010

'July 5, 2010 made the following changes:
'corrected wind vector output settings in 1 hour and 5 min data tables. Originally, the wind speed was used twice
' and wind direction was ignored to compute vector-averaged direction and speed Werner Eugster 5Jul2010

'August 15, 2010 Jim L
' Renamed all tables taking out "TABLE" from the name.
' Increased precision on the Barometric sensor CS100 from fp2 to IEEE4.
' Added Fieldnames to windvector output
' Changed lake quantum integration to 250 to see if this will give correct readings.
' Hand held give 50 um/m2/s  logger 770.  (???) 
 
'August 18 2010 Jim Laundre
'Installed new precipitaion gauge OTT Pluvio2 200mm It is default at .1mm 
'Changed it to .01 mm via software USB on 19August 2010
'Changed Lake quantum and Quant to double end reading.  Fixed the very high reading of the Lake PAR
'and is the recmnmended hookup for this sensor
 
' 22Aug2010 Jim L Change the Pluvio2 multiplier to 0.1 which is what it is output per pulse
'  It looks like need to use the SDI-12 hookup to get other resolution and status.
'  Disabled output for evapo pan.  This sensor is not working with the program.  Need to check it out next year.

' 8 Aug 2011 Jessie Changed out WS, WD, Temp/RH sensors. New RM Young temp/RH is the Farenheit version; 
' Program change added offset and multiplier to convert it back to C 

' 18 Apr 2012 Jessie Changed Temp/RH sensor and changed multiplier to make it C again

' 9 Septmber 2012 Rewired station to add a multiplexer (for cleanliness on the wiring) and also a new Kipp and Zonen CGR-4)

' 4 May 2013  Added quite a bit of wiring information to the program.

''''''''''''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''''''''''''
'' TELEMETRY                        ''''
'' Maxon Data Radio @ 152.480 MHz   ''''
''''''''''''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''''''''''''

''''''''''''''''''''''''''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''  SENSOR LIST   '''''''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Kipp and Zonen CGR-4 Net Radiometer
' CS420 Lake Level Pressure Transducer
' 107 Temperature Probe
' CS100 Setra Barometric Pressure Sensor
' MetOne 024A Wind Direction Sensor
' MetOne 014A Wind Speed Sensor
' Evaporation Pan Pressure Transducer
' AM25T Thermocouple multiplexer with 18 connected thermocouples
' Ott Pluvio Precipitation Gage
' Tipping Bucket Rain Gage (?)
' CMP6 Pyranometer
' Li-Cor Quantum. Model LI-190SB
' Li-Cor Underwater Quantum. LI-192SB
' UVA_YES Pyranometer
' UVB_YES Pyranometer
' HMP45C AT/RH Sensor at 5m 
' RM Young 41382VF AT/RH Sensor at 3m

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''  LOGGER WIRING   ''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' SE1 -- 
' SE2 -- 
' SE3 -- 
' SE4 -- 
' SE5 -- CS420 Lake Level (Orange Wire)
' SE6 -- CS420 Lake Level (Black Wire)
' SE7 -- CS420 Lake Level (White Wire)
' SE8 -- CS420 Lake Level (Yellow Wire Wire)
' SE9 -- 107 Temperature Signal (Red Wire)
' SE10 -- Barometric Pressure Signal (Blue Wire) 
' SE11 -- 
' SE12 -- 
' SE13 -- AM25T HI
' SE14 -- AM25T LO
' SE15 -- Met One 024A WD (Red Wire)
' SE16 -- Evaporation (Red Wire)
' SE17 --Kipp and Zonen CNR-4 Thermistor (Green Wire) & Precision Resistor to VX2 
' SE18 -- 
' SE19 -- AM16/32B HI
' SE20 -- AM16/32B LO
' SE21 -- 
' SE22 -- 
' SE23 -- LakeTC_C HI
' SE24 -- LakeTC_C LO
' SE25 -- 
' SE26 -- 
' SE27 -- 
' SE28 -- 
'
'VX1 -- 107 Temperature Excite (Black Wire); Wind Direction Excite (Black Wire)
'VX2 -- AM25T Excite (Yellow Wire); Precision Resistor to SE17
'VX3 -- Evap Excite (White Wire)
'VX4 -- CS420 Excite (Red Wire)
'
'P1 -- Empty
'P2 -- 5m MetOne 014A Wind Speed (Black Wire)
'P3 -- Ott Pluvio Rain (Green Wire)
'P4 -- Rain 2 (NOT sure what this Is going To) (Red Wire)
'
'C1 -- AM25T RES (Red Wire)
'C2 -- AM25T CLK (Yellow Wire); AM16/32B CLK
'C3 -- Barometric Pressure CTRL
'C4 -- AM16/32B RES
'C5 -- SR50A_1 COM
'C6 -- HMP45C CTRL (Orange Wire)
'C7 -- Empty
'C8 -- Empty



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''  AM25T Wiring (HI = Blue Wire; LO = Red Wire)  ''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Group1 -- EvapoTC
' Group2 -- soil2_moss
' Group3 -- soil2_5cm
' Group4 -- soil2_10cm
' Group5 -- soil2_20cm
' Group6 -- soil2_50cm
' Group7 -- soil2_100cm
' Group8 -- soil2_150cm
' Group9 -- LakeTC_C
' Group10 -- NA10
' Group11 -- NA11
' Group12 -- soil1_moss
' Group13 -- soil1_20cm
' Group14 -- soil1_150cm
' Group15 -- soil1_5cm
' Group16 -- soil1_10cm
' Group17 -- soil1_50cm
' Group18 -- soil1_100cm

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
''' AM16/32B in 2/32 Mode Wiring  '''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' RES -- CR1000 C4
' CLK -- CR1000 C2
' COM ODD HI -- CR1000 SE19
' COM ODD LO -- CR1000 SE20
'Group1 HI  CMP6 Pyranometer HI (Red Wire / Yellow Cable)
'       LO  CMP6 Pyranometer LO (Blue Wire / Yellow Cable)
'Group2 HI  Li-Cor Quantum. Model LI-190SB HI (Red Wire)
'       LO  Li-Cor Quantum. Model LI-190SB LO (Black Wire)
'Group3 HI  Li-Cor Underwater Quantum. LI-192SB HI (Red Wire)
'       LO  Li-Cor Underwater Quantum. LI-192SB LO (Black Wire)
'Group4 HI  Differential Voltage measurements UVA_YES Watts/m2 HI (White Wire)
'       LO  Differential Voltage measurements UVA_YES Watts/m2 LO (Black Wire)
'Group5 HI  Differential Voltage measurements UVB_YES Watts/m2 HI (White Wire)
'       LO  Differential Voltage measurements UVB_YES Watts/m2 LO (Black Wire)
'Group6 HI  HMP45C at 5m AT HI (Yellow Wire) 
'       LO  HMP45C at 5m AT LO, Jumper To G7LO (Purple Wire)
'Group7 HI  HMP45C at 5m RH HI (Blue Wire)
'       LO  HMP45C at 5m RH LO, Jumper To G6LO (Purple Wire)
'Group8 HI  RM Young 41382VF Air Temperature at 3m (Red Wire)
'       LO  RM Young 41382VF Air Temperature at 3m, Jumper to Group 9 LO (Black Wire)
'Group9 HI  RM Young 41382VF Relative Humidity Sensor at 3m (Green Wire)
'       LO  RM Young 41382VF Relative Humidity Sensor at 3m (Jumper to Group 8 LO)
'Group10 HI CNR4 SW UP HI 
'        LO CNR4 SW UP LO

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
''   Sensor Wiring   ''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' CS420 Lake Level Pressure Transducer
' Orange Wire        -- CR3000 SE5
' Black Wire         -- CR3000 SE6 
' Yellow Wire        -- CR3000 SE7
' Blue Wire          -- CR3000 SE8
' Red Wire           -- VX4
' Clear, White Wires -- CR1000 Signal Ground

' 107 Temperature Probe
' Red Wire    -- CR3000 SE9
' Black Wire  -- CR3000 Vx1
' Purple Wire -- CR3000 Signal Ground
' Clear Wire  -- CR3000 Signal Ground

' CS100 - Setra Model 278 Barometric Pressure
' Blue Wire   -- CR3000 SE10
' Yellow Wire -- CR3000 AG
' Black Wire  -- CR3000 G
' Clear Wire  -- CR3000 G
' Green Wire  -- CR3000 C3

' Met One 024A Wind Direction Sensor
' Red Wire   -- CR3000 SE15
' Black Wire -- CR3000 VX1
' White Wire -- CR3000 Signal Ground

' MetOne 014A Wind Speed Sensor
' Black Wire -- CR3000 P2
' White Wire -- CR3000 Signal Ground
' Clear Wire -- CR3000 Signal Ground

' Evaporation Pan
' Red Wire   -- CR3000 SE16
' White Wire -- CR3000 VX3 
' Black Wire -- CR3000 Signal Ground

' CMP6 Pyranometer
' Red Wire   -- AM16/32B Group 1 HI
' Blue Wire  -- AM16/32B Group 1 LO
' Black Wire -- AM16/32B AG
' Li-Cor Quantum Model LI-190SB 
' Red Wire   -- AM16/32B Group 2 HI
' Black Wire -- Am16/32B Group 2 LO

' Li-Cor Underwater Quantum. LI-192SB
' Red Wire -- AM16/32B Group 3 HI
' Black Wire -- AM16/32B Group 3 LO

' Yankee Environmental Systems UV A Pyranometer
' White Wire -- AM16/32B Group 4 HI
' Black Wire -- AM16/32B Group 4 LO

' Yankee Environmental Systems UV B Pyranometer
' White Wire -- AM16/32B Group 5 HI
' Black Wire -- AM16/32B Group 5 LO

' Vaisala HMP45C Air Temperature / Relative Humidity @ 5m
' Yellow Wire -- AM16/32B Group 6 HI
' Blue Wire   -- AM16/32B Group 7 Hi
' Purple Wire -- AM16/32B Group 6 & 7 LO
' Orange Wire -- CR3000 C6
' Red Wire    -- CR100 12V
' Black Wire  -- CR3000 G
' Clear Wire  -- CR3000 G

' RM Young 41382VF AT/RH @ 3m
' Red Wire   -- AM16/32B Group 8 HI
' Green Wire -- AM16/32B Group 9 HI
' Black Wire -- AM16/32B Group 8 & 9 LO
' White Wire -- CR3000 12V
' Clear Wire -- CR3000 AG

' Kipp & Zonen CNR4 Net Radiometer
' CNR4 Left Yellow Cable
' Pyranometer Upper Hi (Red Wire) -- AM16/32B Group 10 Hi
' Pyranometer Upper Lo (Blue Wire) -- AM16/32B Group 10 Lo
' Pyranometer Lower Hi (White Wire) -- AM16/32B Group 11 Hi
' Pyranometer Lower Lo (Black Wire) -- AM16/32B Group 11 Lo
' Pyrgeometer Upper Hi (Gray Wire) -- AM16/32B Group 12 Hi
' Pyrgeometer Upper Lo (Yellow Wire) -- AM16/32B Group 12 Lo
' Pyrgeometer Lower Hi (Brown Wire) -- AM16/32B Group 13 Hi
' Pyrgeometer Lower Lo (Green Wire) -- AM16/32B Group 13 Lo
' Shield -- AM16/32B Ground
' CNR4 Right Yellow cable
' Thermistor Hi (White Wire) -- CR1000 SE17
' Thermistor Lo (Black Wire) -- CR1000 AG
' Precision Resistor -- CR3000 SE17 to CR3000 VX1 
' Shield -- CR1000 Ground

' OTT Pluvio 2
' Green Wire -- CR3000 P3
' White Wire -- CR3000 AG
' Red Wire   -- CR3000 12V
' Black Wire -- CR3000 G

' Tipping Bucket
' Red Wire   -- CR3000 P4
' Black Wire -- CR3000 G

''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
'' Declare Constants '''''''''
''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
    Const CNR4_SW_UP_CF = 1 / 11.22 * 1000   ' = (1 / 15.49 uV / (W/m^2) ) to units: W/m^2 / mV
    Const CNR4_SW_DN_CF = 1 / 12.87 * 1000   ' = (1 / 10.63 uV / (W/m^2) ) to units: W/m^2 / mV
    Const CNR4_LW_UP_CF = 1 / 7.02 * 1000    ' = (1 / 9.00 uV / (W/m^2) ) to units: W/m^2 / mV
    Const CNR4_LW_DN_CF = 1 / 7.67 * 1000    ' = (1 / 8.13 uV / (W/m^2) ) to units: W/m^2 / mV
    
''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
'' Declare Public Variables ''
''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
  Public Batt_Volt 'There are fuses on the batteries. If +/- touch, fuses may blow. Check these if power issues exist.
  Public panel_temp
  Public SolarkW 'Red - 1H, Blue - 1L, Black - AG
  Public SolarkJ
  Public Quant 'Red - SE3 (2H), Black - AG
  Public LakeQuant 'Red - SE4 (2L), Black - AG
  Public LakeLvl_cm 'Red - Vx4, White - AG, Orange - 3H, Black - 3L, Yellow - 4H, Blue - 4L, Clear - AG
  Public LakeTemp_C 'Red - SE9 (4L), Black - Vx1, Purple - AG, Clear - AG
  Public Press_mBar 'Blue - SE10 (5H), Green - C3, Yellow - AG, Black - G, Clear - G, Red - 12V
  Public AirTemp_5m 'Yellow - SE11(5L), Blue - SE12(6H), Purple - AG, Orange - C6, Red - 12V, Black - G, Clear - G
  Public RH_5m 
  Public MplexRTemp_C 'AM25T:CR3000, AG:AG, HI:7H, LO:7L, EX:Vx2, RES:C1, CLK:C2, AG:G, +12:12V
  Public AirTemp_3m 'Read - 10H, Black - 10L, Green - 11H, Jumper to Black - 11L, Clear - G, White - 12V
  Public RH_3m 
  Public Evap_Depth, Evap_offset 'White - Vx3, Red - SE16(8H), Black - AG
  Public WindDir 'BrHalf: Red - SE15(8L), Black - Vx1, White - AG, Clear - AG
  Public WS_5m 'Black - P2, White - AG, Clear - AG
  Public Rain_mm 'P3
  Public Rain2_mm 'P4
  Public UVA_YES 'YES UVA SE23 single ended voltage measurement UVA-1 S/N 091001 coefficient 29.02 Watts per m2 per Volt    (W/m2)/V
  Public UVB_YES 'YES UV  SE24 single ended voltage measurement UVB-1 S/N 090706 coefficient 2.06 Watts per m2 per Volt    (W/m2)/V
  Public MplexTemp_C(18) 'Blue - H, Red - L
  Public CNR_Therm
  Public CNR_Temp_K
  Public CNR4_SW_UP
  Public CNR4_SW_DN
  Public CNR4_LW_UP
  Public CNR4_LW_DN
  Public rTime(9)
  Public SR50_1(2)
  Public temp_cor_dist_1
  Public snow_depth_1
  Public init_snow_dist_1
  Public LakeTC_C
  
''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
'' Aliases  ''''''''''''''''''
''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
  Alias MplexTemp_C(1)= EvapoTC
  Alias MplexTemp_C(2)= soil2_moss
  Alias MplexTemp_C(3)= soil2_5cm
  Alias MplexTemp_C(4)= soil2_10cm
  Alias MplexTemp_C(5)= soil2_20cm
  Alias MplexTemp_C(6)= soil2_50cm
  Alias MplexTemp_C(7)= soil2_100cm
  Alias MplexTemp_C(8)= soil2_150cm
'  Alias MplexTemp_C(9)= LakeTC_C        '5/2013 doesn't presently fit on AM25T with new tower.
  Alias MplexTemp_C(10)= NA10
  Alias MplexTemp_C(11)= NA11
  Alias MplexTemp_C(12)= soil1_moss
  Alias MplexTemp_C(13)= soil1_20cm
  Alias MplexTemp_C(14)= soil1_150cm
  Alias MplexTemp_C(15)= soil1_5cm
  Alias MplexTemp_C(16)= soil1_10cm
  Alias MplexTemp_C(17)= soil1_50cm
  Alias MplexTemp_C(18)= soil1_100cm
   
  Alias rTime(1) = Year          
  Alias rTime(2) = Month         
  Alias rTime(3) = DOM  
  Alias rTime(4) = Hour 
  Alias rTime(5) = Minute 
  Alias rTime(6) = Second  
  Alias rTime(7) = uSecond   
  Alias rTime(8) = WeekDay  
  Alias rTime(9) = Day_of_Year 
  Alias SR50_1(1) = Raw_Dist_1
  Alias SR50_1(2) = SignalQuality_1

''''''''''''''''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''''''''''''''''
'' Define Units for the Output Variables  ''
''''''''''''''''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''''''''''''''''
  Units Batt_Volt=Volts
  Units SolarkW=kW/m²
  Units SolarkJ=kJ/m²
  Units LakeQuant=micromoles/m²/sec
  Units Quant=micromoles/m²/sec
  Units Press_mBar=millibars
  Units AirTemp_3m=Deg C
  Units RH_3m=%
  Units AirTemp_5m=Deg C
  Units RH_5m=%
  Units WS_5m=meters/Second
  Units WindDir=degrees
  Units Rain_mm=mm
  Units Rain2_mm=mm
  Units MplexRTemp_C=Deg C
  Units MplexTemp_C=Deg C
  Units LakeTemp_C=Deg C
  Units LakeLvl_cm=cm
  Units Evap_Depth=mm
  Units UVA_YES=Watts/m2
  Units UVB_YES=Watts/m2
  Units CNR4_SW_UP=Watts/m2
  Units CNR4_SW_DN=Watts/m2
  Units CNR4_LW_UP=Watts/m2
  Units CNR4_LW_DN=Watts/m2
  Units CNR_therm = Ohms
  Units CNR_Temp_K = Deg K


'''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''
'' Define Data Output Tables ''
'''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''


DataTable(FiveMinutes,True,-1)
 'Five Minute Measurements
  DataInterval(0,5,Min,10)
  CardOut(0,-1)
    Sample(9,rTime(),FP2)
      Average(1,SolarkW,FP2,False)
    Average(1,UVA_YES,FP2,False)
      Average(1,UVB_YES,FP2,False)
      Average(1,AirTemp_5m,FP2,False)
      Average(1,AirTemp_3m,FP2,False)
      Average(1,RH_3m,FP2,False)
      Average(1,RH_5m,FP2,False)
      WindVector (1,WS_5m,WindDir,FP2,False,0,0,0)
      FieldNames ("mean_wind_speed_5m, mean_wind_direction_5m, std_wind_dir")
      Average(1,Quant,fp2,false)
      Average(1,cnr4_sw_up,FP2,False)
      Average(1,cnr4_sw_dn,FP2,False)
      Average(1,cnr4_lw_up,FP2,False)
      Average(1,cnr4_lw_dn,FP2,False)            
      Average(1,cnr_temp_k,FP2,False)
EndTable

DataTable(Hourly,True,-1)
  'Hourly Measurements
     DataInterval(0,60,Min,10)
    Sample(4,rTime(),FP2)
    Average(1,Batt_Volt,FP2,False)
    Average(1,SolarkW,FP2,False)
    Average(1,LakeQuant,FP2,False)
    Average(1,Quant,FP2,False)
    Average(1,UVA_YES,FP2,False)
      Average(1,UVB_YES,FP2,False)
    Average(1,Press_mBar,IEEE4,False)
    Average(1,AirTemp_3m,FP2,False)
    Average(1,RH_3m,FP2,False)
    Average(1,AirTemp_5m,FP2,False)
    Average(1,RH_5m,FP2,False)
    'Average(1,WS_5m,FP2,False) same as the wind speed in the windvector 
    WindVector (1,WS_5m,WindDir,FP2,False,0,0,0)
    FieldNames ("mean_wind_speed_5m, mean_wind_direction_5m, std_wind_dir")
    'Sample(1,WindDir,FP2) meanless to sample once and hour
    Totalize(1,Rain_mm,FP2,False)
    Totalize(1,Rain2_mm,FP2,False)
    Average(1,cnr4_sw_up,FP2,False)
    Average(1,cnr4_sw_dn,FP2,False)
    Average(1,cnr4_lw_up,FP2,False)
    Average(1,cnr4_lw_dn,FP2,False)            
    Average(1,cnr_temp_k,FP2,False)
EndTable

DataTable(ThreeHourly,True,-1)
 'Three-Hourly Measurements
    DataInterval(0,3,Hr,10)
    CardOut(0,-1)
    Sample(4,rTime(),FP2)
    Average(1,Batt_Volt,FP2,False)
    Average(1,MplexRTemp_C,FP2,False)
    Average(18,MplexTemp_C(),FP2,False)
    Average(1,LakeTemp_C,FP2,False)
    Average(1,LakeLvl_cm,IEEE4,False)
    Average(1,Evap_Depth,fp2,True)
EndTable
    
DataTable(Daily,True,-1)
 'Daily Measurements
  DataInterval(0,1,Day,0)
  CardOut(0,-1)
    Sample( 9, rTime(), FP2 )             
    Average(1,Batt_Volt,FP2,False)
    Totalize(1,Rain_mm,FP2,False)
    Totalize(1,Rain2_mm,FP2,False)
    Average(1,AirTemp_5m,FP2,False)
    Maximum(1,AirTemp_5m,FP2,False,True)
    Minimum(1,AirTemp_5m,FP2,False,True)
    Average(1,AirTemp_3m,FP2,False)
    Maximum(1,AirTemp_3m,FP2,False,True)
    Minimum(1,AirTemp_3m,FP2,False,True)
    Maximum(1,WS_5m,FP2,False,True)
    Average(1,WS_5m,FP2,False)
    Sample(1,evap_offset,fp2)
EndTable

DataTable(Snow,True,1000)
  DataInterval(0,5,Min,0)
  CardOut(0,1000)
    Sample(1,snow_depth_1,fp2)
    Sample(1,Temp_Cor_Dist_1,fp2)
EndTable

'''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''
'' Main Program '''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''

BeginProg
  Signature
  evap_offset = -1.1247  
  init_snow_dist_1 = 100
  Scan(60,Sec,1,0)
    RealTime(rTime())
    
    'Default Datalogger Battery Voltage measurement Batt_Volt:
    Battery(Batt_Volt)
    PanelTemp(panel_temp,_60Hz)
    ''''''''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''
    ''' Measure Sensors on AM16/32B  '''''''
    ''''''''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''        
    PortSet(4,1)  'AM16/32B ON

    '''''''''''''''''''
    ''' CMP6  '''''''''
    '''''''''''''''''''
    'CMP6 Pyranometer measurements SlrkJ and SlrkW. New installed Aug 2008:
    'Sensitivity: 16.27 uV/W/m2
    PulsePort(2,10000)
    VoltDiff(SolarkW,1,mV50,10,True,0,_60Hz,1,0)
    If SolarkW<0 Then SolarkW=0
    SolarkJ=SolarkW*0.30731
    SolarkW=SolarkW*0.06146

    '''''''''''''''''
    ''' PAR  ''''''''
    '''''''''''''''''
    'Li-Cor Quantum. Model LI-190SB. Quantum measure photosynthetically active radiation (PAR) in mmol s-1 m-2. 
    PulsePort(2,10000)
    VoltDiff(Quant,1,mV20,10,1,0,_60Hz,200,0)
    
    '''''''''''''''''''''''''    
    ''' Underwater PAR  '''''
    '''''''''''''''''''''''''
    'Li-Cor Underwater Quantum. LI-192SB. Accurate measurement of PAR in Aquatic systems.
    PulsePort(2,10000)
    VoltDiff(LakeQuant,1,mV20,10,1,0,_60Hz,475.75,0)

    ''''''''''''''''''''''''''''
    ''' Yes UVA Sensor  ''''''''
    ''''''




''''''''''''''''''''''
    'Differential Voltage measurements UVA_YES Watts/m2
    ' 2010-07-01 Werner Eugster:
    '   changed do differential volt reading, channel from 1 SE to 12 DIFF
    '   changed multiplier from 0.029 to 0.02902
    PulsePort(2,10000)
    VoltDiff(UVA_YES,1,mV5000,10,True ,0,_60Hz,0.02902,0)
    
    ''''''''''''''''''''''''''''
    ''' Yes UVB Sensor  ''''''''
    ''''''''''''''''''''''''''''    
    'Differential Voltage measurements UVB_YES Watts/m2
    ' 2010-07-01 Werner Eugster:
    '   changed do differential volt reading, channel from 2 SE to 13 DIFF
    '   changed multiplier from 0.0206 to 0.00206
    PulsePort(2,10000)
    VoltDiff(UVB_YES,1,mV5000,10,True,0,_60Hz,0.00206,0.0)

    '''''''''''''''''''''''''''''
    ''' HMP45C   ''''''''''''''''
    '''''''''''''''''''''''''''''    
    'HMP45C at 5m (7-wire) Temperature & Relative Humidity Sensor measurements AirTemp and RH:
    PulsePort(2,10000)
    PortSet(6,1)
    Delay(0,150,mSec)
    VoltDiff(AirTemp_5m,1,mV1000,10,0,0,_60Hz,0.1,-40.0)
    PulsePort(2,10000)
    VoltDiff(RH_5m,1,mV1000,10,0,0,_60Hz,0.1,0)    
    PortSet(6,0)
    If RH_5m>100 AND RH_5m<108 Then RH_5m=100
    
    ''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''    
    ''' RM Young 41382VF   '''''''
    ''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''    
    'RM Young 41382VC Temperature & Relative Humidity Sensor at 3m measurements AirTemp and RH:
    PulsePort(2,10000)
    VoltDiff(AirTemp_3m,1,mV1000,10,True,0,_60Hz,0.1,-50.0)
    PulsePort(2,10000)
    VoltDiff(RH_3m,1,mV1000,10,True,0,_60Hz,0.1,0)
    If RH_3m>100 AND RH_3m<108 Then RH_3m=100

    ''''''''''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''''
    ''' CNR4 $ Component Net Radiation   '''''
    ''''''''''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''''
    '' Added 5/2013 
    ' measure internal thermistor
    BrHalf(CNR_Therm,1,mV5000C,17,2,1,5000,True,0,_60Hz,1,0)  ' need to change SE & VX to asbuilt
    CNR_Therm = 9990  * (CNR_Therm / (1 - CNR_Therm) ) ' need to change resistor value
    CNR_Temp_K = 1 / ( 1.029e-3 + 2.391e-4 * LN(CNR_Therm) + 1.568e-7*(LN(CNR_Therm))^3)
    PulsePort(2,10000)
    VoltDiff (cnr4_sw_up,1,mV20C,10,True ,0,_60Hz,cnr4_sw_up_cf,0)       ' Measure SW UP
    PulsePort(2,10000)
    VoltDiff (cnr4_sw_dn,1,mV20C,10,True ,0,_60Hz,cnr4_sw_dn_cf,0)       ' Measure SW DN
    PulsePort(2,10000)
    VoltDiff (cnr4_lw_up,1,mV20C,10,True ,0,_60Hz,cnr4_lw_up_cf,0)       ' Measure LW UP
    cnr4_lw_up = cnr4_lw_up + 5.67e-8 * CNR_Temp_K^4                  ' temperature correction
    PulsePort(2,10000)
    VoltDiff (cnr4_lw_dn,1,mV20C,10,True ,0,_60Hz,cnr4_lw_dn_cf,0)       ' Measure LW DN
    cnr4_lw_dn = cnr4_lw_dn + 5.67e-8 * CNR_Temp_K^4                  ' temperature correction

    ''''''''''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''''
    ''' Finished with AM16/32B sensors '''''''
    ''''''''''''''''''''''''''''''''''''''''''   
    PortSet(4,0)  'AM16/32B OFF    
    
    ''''''''''''''''''
    ''''''''''''''''''    
    ''' Druck  '''''''
    ''''''''''''''''''
    ''''''''''''''''''
    
    'CS420/CS425 Druck PDCR 1830/1230 Pressure Tansducer (6-wire) measurement Lvl_cm:
    'Requires 2 VoltDiff channels: 3 and 4. VoltDiff channels MUST be sequential.
    BrFull6W(LakeLvl_cm,1,mV5000,mV50,3,Vx4,1,5000,True,True,0,_60Hz,71.743,0)  
    
    '107 Temperature Probe measurement for Lake Temp_C - new Installed Aug 2008:
    'Sitting in bucket with ice water - readings: 0.2 deg C.
    Therm107(LakeTemp_C,1,9,Vx1,0,_60Hz,1.0,0.0)
    
    ''''''''''''''''''
    ''''''''''''''''''
    ''' Pressure  ''''
    ''''''''''''''''''
    ''''''''''''''''''        
    'CS100 Barometric Pressure Sensor measurement Press_mbar:
    If IfTime(59,60,Min) Then PortSet(3,1)
    If IfTime(0,60,Min) Then
      VoltSe(Press_mBar,1,mV5000,10,1,0,_60Hz,0.2,600.0)
      Press_mBar=Press_mBar*1.0
      PortSet(3,0)
    EndIf

    ''''''''''''''''''''
    ''''''''''''''''''''
    ''' Wind  ''''''''''
    ''''''''''''''''''''
    ''''''''''''''''''''             
    '024A Wind Direction Sensor measurement WindDir:
    BrHalf(WindDir,1,mV5000,15,Vx1,1,5000,True,2000,250,735.140,0)    
    If WindDir>=360 Then WindDir=0
    
    '014A Wind Speed Sensor measurement at 5m WS_5m:
    ' Installed sensor #K2064 Was recalibrated 2006 but never installed Jim L 16Aug10
    PulseCount(WS_5m,1,2,2,1,0.8,0.447)
    If WS_5m=0.447 Then WS_5m=0
    
    '''''''''''''''''''''''''
    '''''''''''''''''''''''''
    ''' Precipitation  ''''''
    '''''''''''''''''''''''''
    '''''''''''''''''''''''''        
    'OTT Pluvio 250mm with ring heater Rain Gauge measurement Rain_mm:
    '18Aug2010 Jim L  Replaced with an OTT Pluvio2 200mm old one was giving count when there was not snow.
    '22Aug10 Jim L The Pluvio2 has.1mm per pulse ; changed multipler to .1 from .01
    PulseCount(Rain_mm,1,3,2,0,0.1,0)
    
    'Rain tipping bucket measurement Rain2_mm:
    PulseCount(Rain2_mm,1,4,2,0,0.254,0)
    

    ''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''        
    ''' Measure Snow Sensor  '''''''''
    ''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''        
    If IfTime(0,300,Sec) Then
        SDI12Recorder (SR50_1(),5,0,"C!",100.0,0)
        Temp_Cor_Dist_1 = Raw_Dist_1 * ( SQR( (AirTemp_3m + 273.15 ) / 273.15 ) )            
        Snow_Depth_1 = Init_Snow_Dist_1 - Temp_Cor_Dist_1            
    EndIf    
    ''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''        
    ''' AM25T Multiplexer  '''''''''''
    ''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''
    'Reference Temperature measurement RTemp_C on the AM25T Multiplexer:
    AM25T(MplexRTemp_C,0,mV20C,1,7,TypeT,MplexRTemp_C,2,1,Vx2,True,0,250,1,0)
    'Type T (copper-constantan) Thermocouple measurements Temp_C(1) on the AM25T Multiplexer. For Evaporation Pan and Soil Temp Thermocouples:
    AM25T(MplexTemp_C(1),18,mV20C,1,7,TypeT,MplexRTemp_C,2,1,Vx2,True,0,_60Hz,1,0)
    
    ' New for 5/2013 The Lake thermocouple has moved to the CR3000... cable length issues.    
    TCDiff (LakeTC_C,1,mV20c,12,TypeT,panel_temp,True ,0,250,1.0,0)


    'Evaporation Pan measurement Evap_Depth
    ' this instruction modified in September 2012 to fix a bug created in the 21X to CR3000 program conversion.
    ' The 21X program was applying the multiplier & offset to the milliVolt output being measured.
    ' this instruction returns (with multiplier of 1 and offset of 0) the ratio: measured volts / excitation volts.  Multiplying by the exciation voltage
    ' then returns measured volts as desired.
    BrHalf (Evap_Depth,1,mV5000,16,Vx3,1,5000,True ,0,250,1 * 5000,0)
    Evap_Depth = 0.03121 * Evap_Depth + Evap_offset
          
    'Call Data Tables and Store Data
    CallTable(FiveMinutes)
    CallTable(Hourly)
    CallTable(Daily)
    CallTable(ThreeHourly)    
    CallTable(snow)
    NextScan
EndProg
